opentrons/protocol-designer 5.2.5
schemaVersion: 3
protocolName: Plate Glycerol Stocks
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 1}
  Glycerol: {definitionId: opentrons/opentrons_10_tuberack_falcon_4x50ml_6x15ml_conical/1, slot: 5}
  Opentrons 24 Tube Rack with Generic 2 mL Screwcap: {definitionId: opentrons/opentrons_24_tuberack_generic_2ml_screwcap/1, slot: 10}
  Opentrons 96 Tip Rack 1000 µL (1): {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 2}
  Opentrons 24 Tube Rack with Generic 2 mL Screwcap (1): {definitionId: opentrons/opentrons_24_tuberack_generic_2ml_screwcap/1, slot: 11}
  Opentrons 24 Tube Rack with Generic 2 mL Screwcap (2): {definitionId: opentrons/opentrons_24_tuberack_generic_2ml_screwcap/1, slot: 7}
  Opentrons 24 Tube Rack with Generic 2 mL Screwcap (3): {definitionId: opentrons/opentrons_24_tuberack_generic_2ml_screwcap/1, slot: 8}
  Source: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 4}
  Opentrons 96 Tip Rack 1000 µL (2): {definitionId: opentrons/opentrons_96_tiprack_1000ul/1, slot: 3}
pipetteTiprackAssignments:
  p1000_single: opentrons/opentrons_96_tiprack_1000ul/1
ingredients:
  - Source Plate: {serialize: true}
  - Glycerol
ingredLocations:
  Glycerol:
    Glycerol {volume: 50000}: A3
  Source:
    Source Plate {volume: 100}: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-H6, A7-H7, A8-H8, A9-H9, A10-H10, A11-H11, A12-H12
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 300
  path: multiDispense
  changeTip: once
  aspirate_labware: Glycerol
  aspirate_wells: A3
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: source_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 300
  path: multiDispense
  changeTip: never
  aspirate_labware: Glycerol
  aspirate_wells: A3
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (1)
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 300
  path: multiDispense
  changeTip: never
  aspirate_labware: Glycerol
  aspirate_wells: A3
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (2)
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 300
  path: multiDispense
  changeTip: never
  aspirate_labware: Glycerol
  aspirate_wells: A3
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (3)
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 110
  path: single
  changeTip: always
  aspirate_labware: Source
  aspirate_wells: A1-H1, A2-H2, A3-H3
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 110
  path: single
  changeTip: always
  aspirate_labware: Source
  aspirate_wells: A4-H4, A5-H5, A6-H6
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (1)
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 110
  path: single
  changeTip: always
  aspirate_labware: Source
  aspirate_wells: A7-H7, A8-H8, A9-H9
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (2)
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single
  volume: 110
  path: single
  changeTip: always
  aspirate_labware: Source
  aspirate_wells: A10-H10, A11-H11, A12-H12
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  dispense_labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (3)
  dispense_wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
- stepType: mix
  stepName: mix
  pipette: p1000_single
  volume: 110
  times: 5
  changeTip: always
  labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap
  wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p1000_single
  volume: 110
  times: 5
  changeTip: always
  labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (1)
  wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p1000_single
  volume: 110
  times: 5
  changeTip: always
  labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (2)
  wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  mix_mmFromBottom: 0.5
- stepType: mix
  stepName: mix
  pipette: p1000_single
  volume: 110
  times: 5
  changeTip: always
  labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap (3)
  wells: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
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  mix_mmFromBottom: 0.5
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single, labware: Opentrons 96 Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single, volume: 1000, labware: Glycerol, well: A3, offsetFromBottomMm: 1, flowRate: 500}
- dispense: {pipette: p1000_single, volume: 300, labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap, well: A1, offsetFromBottomMm: 0.5, flowRate: 1000}
- dispense: {pipette: p1000_single, volume: 300, labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap, well: B1, offsetFromBottomMm: 0.5, flowRate: 1000}
- dispense: {pipette: p1000_single, volume: 300, labware: Opentrons 24 Tube Rack with Generic 2 mL Screwcap, well: C1, offsetFromBottomMm: 0.5, flowRate: 1000}
- blowout: {pipette: p1000_single, labware: Glycerol, well: A3, flowRate: 1000, offsetFromBottomMm: 113}
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