opentrons/protocol-designer 5.2.5
schemaVersion: 4
protocolName: Culture Plate Creation
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_multi: {mount: left}
modules:
  temperatureModuleV1: {slot: 3}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 1}
  Warm Media: {definitionId: opentrons/usascientific_12_reservoir_22ml/1, slot: temperatureModuleV1}
  Combo: {definitionId: opentrons/nest_96_wellplate_200ul_flat/1, slot: 2}
  Frozen: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, slot: 4}
pipetteTiprackAssignments:
  p300_multi: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Warm Media
ingredLocations:
  Warm Media:
    Warm Media {volume: 1600}: A1-A6
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV1
  setTemperature: true
  targetTemperature: 42
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV1
  pauseAction: untilTemperature
  pauseTemperature: 42
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A1
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  dispense_labware: Frozen
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A1
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  dispense_labware: Combo
  dispense_wells: A1
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A1
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  dispense_labware: Frozen
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A2
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  dispense_labware: Combo
  dispense_wells: A2
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: always
  aspirate_labware: Warm Media
  aspirate_wells: A2
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  dispense_labware: Frozen
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A3
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  dispense_labware: Combo
  dispense_wells: A3
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A2
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  dispense_labware: Frozen
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A4
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  dispense_labware: Combo
  dispense_wells: A4
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A3
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  dispense_labware: Frozen
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A5
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  dispense_labware: Combo
  dispense_wells: A5
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A3
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  dispense_labware: Frozen
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A6
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  dispense_labware: Combo
  dispense_wells: A6
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A4
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  dispense_labware: Frozen
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A7
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  dispense_labware: Combo
  dispense_wells: A7
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A4
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  dispense_labware: Frozen
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A8
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  dispense_labware: Combo
  dispense_wells: A8
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A5
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  dispense_labware: Frozen
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A9
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  dispense_labware: Combo
  dispense_wells: A9
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A5
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  dispense_labware: Frozen
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A10
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  dispense_labware: Combo
  dispense_wells: A10
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A6
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  dispense_labware: Frozen
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A11
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  dispense_labware: Combo
  dispense_wells: A11
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 100
  path: single
  changeTip: once
  aspirate_labware: Warm Media
  aspirate_wells: A6
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  dispense_labware: Frozen
  dispense_wells: A12
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi
  volume: 110
  path: single
  changeTip: never
  aspirate_labware: Frozen
  aspirate_wells: A12
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  dispense_labware: Combo
  dispense_wells: A12
labwareDefinitions:
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV1, temperature: 42}
- temperatureModule/awaitTemperature: {module: temperatureModuleV1, temperature: 42}
- pickUpTip: {pipette: p300_multi, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_multi, volume: 100, labware: Warm Media, well: A1, offsetFromBottomMm: 1, flowRate: 150}
- dispense: {pipette: p300_multi, volume: 100, labware: Frozen, well: A1, offsetFromBottomMm: 0.5, flowRate: 300}
- aspirate: {pipette: p300_multi, volume: 110, labware: Frozen, well: A1, offsetFromBottomMm: 1, flowRate: 150}
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